OpenViBE-Scenario
0x8c1fc55b = 1.0
0x9f5c4075 = P300 Magic Card
0xf6b2e3fa = bci-examples
Comment
  Credits:

  The images flashed in this and the other related
  P300 card scenarios were created by zcool,
  http://www.zcool.com.cn/. Please see
  'license.txt' in the image folder for details.

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-magic-card.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3, Input stream 3=#0.Output stream 4 -> Identity => #1
#1.Output stream 1 -> 0xc67a01dc Channel Selector "Cz;O1;O2"
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #4
  Decimation factor = 4
Input stream 1=#4, Input stream 2=#1.Output stream 2 -> Identity => #5
Data=#5.Output stream 1, Stimulations=#5.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Sequence stimulations=#1.Output stream 2, Target stimulations=#1.Output stream 3 -> P300 Magic Card Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card.ui
  Background color = 90,90,90
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/openvibe-logo.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/01.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/02.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/03.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/04.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/05.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/06.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/07.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/08.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/09.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/10.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/11.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/12.png

Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> P300 Speller Stimulator => #9
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.200000
  No flash duration (in sec) = 0.100000
  Inter-repetition delay (in sec) = 1.000000
  Inter-trial delay (in sec) = 3.000000
  Avoid neighbor flashing = false
-> Target Card Generation => #10
  Lua Script = ${Player_ScenarioDirectory}/p300-magic-card-stimulations-targets.lua
  Card Count = 12
  Stimulation Base = OVTK_StimulationId_Label_01
  Delay Before Sending (in sec) = 2
Acquisition client => #11
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#11.Experiment information, Input stream 2=#11.Signal stream, Input stream 3=#9, Input stream 4=#10 -> Identity => #12
Input stream 1=#12.Output stream 1, Input stream 2=#12.Output stream 2, Input stream 3=#12.Output stream 3, Input stream 4=#12.Output stream 4 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/current-[$core{date}-$core{time}].ov
  Use compression = false
