OpenViBE-Scenario
Comment
  Do not forget to look at the python scripts used
  in all of the python boxes in this scenario.
Comment
  This scenario illustrates several user cases of the Python Scripting Box

  Three boxes are used:

  - Sinus generator : generates signal
  - Clock stimulator : generates stimulations
  - Mean : transforms signal
Comment
  Sinus generator

  This script generates a sine wave.
Comment
  Mean

  This script calculates the mean of
  all of the channels in a signal.

  It describes the use of the
  numpy python library.
Comment
  Spectra are displayed to better compare the generated results
Comment
  Clock stimulator

  This script generates stimulations
  every time it is triggered.

  It illustrates the use of
  Clock Frequency parameter.

Sinus generator => #0
  Clock frequency (Hz) = 16
  Script = ${Player_ScenarioDirectory}/scripts/python-sinus-oscillator.py
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Mean => #1
  Clock frequency (Hz) = 60
  Script = ${Player_ScenarioDirectory}/scripts/python-signal-average.py
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis => #3
  Spectral components = Amplitude
#3.Amplitude -> Mean spectrum
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#0 -> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis => #6
  Spectral components = Amplitude
#6.Amplitude -> 0xc67a01dc Sinus spectrum
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Clock stimulator => #8
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/scripts/python-clock-stimulator.py
  Stimulation = OVTK_StimulationId_Label_00
Data=#1, Stimulations=#8 -> Signal display "Mean"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#0, Stimulations=#8 -> Signal display "Sinus"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
