OpenViBE-Scenario
0x790d75b8 = Jussi T. Lindgren / Inria
0x8c1fc55b = 1.0
0x9f5c4075 = FFT Decomposition
Comment
  A signal is decomposed by Fast Fourier Transform
Comment
  At this stage the signals are in Fourier space
  transmitted in the Spectrum stream format using
  one stream for real and one for imaginary part
Comment
  The reconstructed signal should
  equal the original one

Sinus oscillator => #0
  Channel count = 1
  Sampling frequency = 256
  Generated epoch sample count = 128
Data=#0 -> 0xc67a01dc Signal display "Original"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0 -> Spectral analysis => #2
  Spectral components = Imaginary part;Real part;Phase;Amplitude
#2.Amplitude -> Amplitude
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#2.Phase -> Phase
  Minimum frequency to display = 0
  Maximum frequency to display = 40
real part=#2.Real Part, imaginary part=#2.Imag Part -> IFFT box => #5
Data=#5 -> Signal display "Reconstructed"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
