OpenViBE-Scenario

GDF file reader => #0
  Filename = ${Path_Data}/scenarios/signals/real-hand-movements.gdf
  Samples per buffer = 32
  Subtract physical minimum = False
#0.EEG stream -> Channel Selector
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 1.5
-> AutoRegressive Coefficients
  Order = 7
-> CSV File Writer
  Filename = ${Path_Root}/../plugins/processing/signal-processing/test/ARFeatures.csv
  Column separator = ;
  Precision = 10

Clock stimulator
  Interstimulation interval (in sec) = 1.05
  Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
