OpenViBE-Scenario
Comment
  There is now two "mode" in signal display, wether the input signal is filtered eeg signal or not.
  In eeg mode, all signals are in the same drawing area, and vertical scale is optimize for eeg dispaly (verticale scale of 100)

  You can enable eeg mode by checking EEG display in box settings.
Comment
  The Generic Stream Reader box
  reads an OpenViBE file from disk and sends
  its content to the following box.
  The OpenViBE file format can store any
  stream of the OpenViBE platform into a file.
Comment
  The Temporal Filter, filters the input signal
  according to the settings.
  Here we use a Butterworth band-pass.
Comment
  The Signal Display box displays
  the content of the file in standard mode.
Comment
  The Signal Display box displays
  the content of the file in EEG mode.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
Data=#0.Output stream 2, Stimulations=#0.Output stream 3 -> Signal display "Raw signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false

Generic stream reader => #2
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
#2.Output stream 2 -> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Data=#3, Stimulations=#2.Output stream 3 -> Signal display "Filtered signal"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
