OpenViBE-Scenario
0x8c1fc55b = 1.0
0x9f5c4075 = Time/Frequency map example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  The Generic Stream Reader box
  reads an OpenViBE file containing signals.
Comment
  Each channel is referenced against
  channel Nz (which was recorded on the nose
  in the demonstrated file) thanks to the
  Reference Channel box.
Comment
  The Channel Selector box selects
  5 channels over the left motor cortex and
  5 channels over the right motor cortex.
Comment
  The Spatial Filter box applies a
  surface laplacion to the 10 input channels,
  resuling in a two channels output : one for
  the left motor cortex, and one for the right
  motor cortex.
Comment
  Then the Temporal Filter box
  filters the signal in the [1 128] Hz range.
Comment
  The Time Based Epoching box
  splits the signals in blocks of 1 seconds every
  160th of second. This is a moving window.
Comment
  An FFT is applied on each window thanks to the
  Spectral Analisys box.
Comment
  Finally, the Power Spectrum Display
  and the Time-Frequency Map Display
  boxes display the resuling spectrum.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> 0xc67a01dc Channel Selector "C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4"
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 128.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.006250
-> Spectral analysis => #6
  Spectral components = Amplitude
#6.Amplitude -> Power spectrum display
  Minimum frequency to display = 6.000000
  Maximum frequency to display = 28.000000
#6.Amplitude -> Time-frequency map display
  Time Scale = 3.000000
  Minimum frequency to display = 6.000000
  Maximum frequency to display = 28.000000
