OpenViBE-Scenario
Comment
  The Keyboard Stimulator box
  sends a defined stimulation when pressing a key.

  In the case of this scenario, key 'a' will start the
  sound playback. The Keyboard stimulator
  window must have focus when the key is pressed.
Comment
  The Sound Player box
  plays and stops a sound according to stimulation triggers.
  The sound can be in OGG or WAV format.

  When the sound file stops,
  the stimulation OVTK_StimulationId_EndOfFile is output
Comment
  The Stimulation Listener box
  prints the incoming stimulations to the console.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> Sound Player
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_02
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false
-> Stimulation listener
  Log level to use = Information
